PsychoPy2experiment version="3.0.1"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = untitled
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Routines
  Routine InterTrial
    PolygonComponent blackWaitInterTrial_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial_2
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
  Routine description
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Please determine whether each image matches one of the images shown with a green border.
        If it matches,
        please quickly press the A (L) key.
        If it does not,
        please quickly press the L (A) key.

        If a cross (+) appears appears,
        please quickly press both keys.

        PRESS THE SPACEBAR WHEN READY
    KeyboardComponent keyPressRun
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
    PolygonComponent fixation
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent fixationImage
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        blockIdx = blockIdx + 1
  Routine Fixation10
    PolygonComponent fixation10
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent fixationImage10
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine init
    CodeComponent InitCode
      Code Type = Py
      Begin Routine:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')

        # Open LabRecorder
        #os.startfile(".\lib\LabRecorder\LabRecorder.exe")




        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='my_stream_name', type='Markers', channel_count=1,
                          channel_format='string', source_id='keyboard("`" , "-")')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)









        # Fix random seed
        random.seed()
        # Read stimuli excel file
        infile = './lib/list.xlsx'
        # Number of stimuli
        num_rows = 18
        num_trials = 13


        #Open the xlsx stimuli file and select the first sheet
        inbook = xlrd.open_workbook(infile)
        List1 = inbook.sheet_by_index(0)
        List2 = inbook.sheet_by_index(1)
        List3 = inbook.sheet_by_index(2)
        List4 = inbook.sheet_by_index(3)
        List5 = inbook.sheet_by_index(4)
        List6 = inbook.sheet_by_index(5)
        List7 = inbook.sheet_by_index(6)
        List8 = inbook.sheet_by_index(7)





        #Target1=[]  #first stimulus in AX-AY-BX-BY
        #Jitter1=[]
        #read the stimuli from our sheet
        #for rowx in range(num_rows):
        #    row = List1.row_values(rowx)
        #    Jitter1.append(row[3])


        #row = List1.row_values(0)
        #Target1.append(row[9])
  Routine initiation
    CodeComponent code_1
      Code Type = Py
      Begin Experiment:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')

        # Open LabRecorder
        #os.startfile(".\lib\LabRecorder\LabRecorder.exe")



        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='Keyboard', type='Markers', channel_count=1,
                          channel_format='string', source_id='Keyboard')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)



        currentTime = expInfo['date']
        subjectID = expInfo['participant']
        Labrecorder = '.\lib\LabRecorder\LabRecorderCLI.exe'
        Dataset='.\Dataset'

        # Open LabRecorder
        import subprocess, sys, os, winpexpect, time
        #os.system("start /B start cmd.exe @cmd /k .\lib\LabRecorder\LabRecorderCLI.exe .\Dataset\'currentTime'.xdf 'type=EEG'")
        #os.system("start /B start cmd.exe @cmd /k %s %s\%s_%s 'type=EEG'" % (Labrecorder, Dataset, currentTime,subjectID))
        child =  winpexpect.winspawn('%s %s\%s_%s.xdf \'name="Keyboard"\'' % (Labrecorder,Dataset,currentTime,subjectID))







        # Fix random seed
        random.seed()
        # Read stimuli excel file
        infile = './lib/listA1.xlsx'
        # Number of stimuli
        numBlocks = 8
        numTrials = 12

        pictureSize=(0.75,1)
        greenSize=(1.6,1.2)




        Jitter = []
        Duration = []
        ISI = []
        Picture = []
        correctseth = []
        Target = []
        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        for rowx in range(1,List.nrows):
            row = List.row_values(rowx)
            Jitter.append(row[3])
            Picture.append(row[4])
            Duration.append(row[5])
            ISI.append(row[6])
            correctseth.append(row[8])
            Target.append(row[9])


        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        procIdx = []
        for rowx in range(1,9):
            row = List.row_values(rowx)
            indices = row[11]
            procLine, aa = indices.split(":")
            procIdx.append(int(procLine))

        # index of trial number and block number
        trialIdx = 0
        blockIdx = 0

        # parse out the duration of trial and inter-trial
        TrialDuration = [x/1000 for x in Duration]
        ITDuration = [x/1000 + y/1000 for x,y in zip(ISI,Jitter)]
  Routine TrialList
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        index = index + 1
    PolygonComponent blackTrial
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent whiteTrial
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent TrialPicture
      image [set every repeat] = $Picture[index]
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    KeyboardComponent keyPressTrial
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
      store = first key
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        #outlet.push_sample('t')
        outlet.push_sample(correctseth[index])
        PressedYet = 0
      Each Frame:
        # Send trial onset marker to LSL
        #if ((keyPressTrial.keys) and (not PressedYet)):
        #    outlet.push_sample(str(keyPressTrial.keys)[0])
        #    PressedYet = 1

        if ((keyPressTrial.keys) and (not PressedYet)):
            if correctseth[index] == str(keyPressTrial.keys)[0]:
                outlet.push_sample('1')
                #print('correct')
            else:
                outlet.push_sample('2')
                #print('incorrect')
            PressedYet = 1
  Routine waitInterTrial
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent blackWaitInterTrial
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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  Routine Procedure1
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx-1
    PolygonComponent blackProc
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent greenProc
      fillColor = green
      lineColor = green
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcTarget
      image [set every repeat] = $Target[index]
      pos = (-0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcPicture
      image [set every repeat] = $Picture[index]
      pos = (0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('b')
  Routine ProcedureSelection
    CodeComponent code_11
      Code Type = Py
  Routine end
    PolygonComponent polygon_end
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Thank you for your
        participation!
    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('e')
      End Routine:
        child.sendline('\r')
  Routine calc
    CodeComponent code_8
      Code Type = Py
  Routine calc_2
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx

        print(index)
        print(Duration[index])

        TrialDuration=Duration[index]/1000+Jitter[index]/1000
        ITDuration=ISI[index]/1000+Jitter[index]/1000
Flow
  Routine initiation
  Routine description
  Routine Fixation10
  LoopInitiator TrialListIteration loopType="TrialHandler"
    loopType = sequential
    nReps = numBlocks
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    Routine Procedure1
    Routine waitInterTrial
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = numTrials
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      Routine TrialList
      Routine InterTrial
    LoopTerminator trials
    Routine Fixation
  LoopTerminator TrialListIteration
  Routine end
