PsychoPy2experiment version="3.0.1"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = untitled
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Routines
  Routine InterTrial
    PolygonComponent blackWaitInterTrial_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial_2
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
  Routine description
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A1
        Please determine whether each image matches one of the images shown with a green border.
        If it matches,
        please quickly press the A (L) key.
        If it does not,
        please quickly press the L (A) key.

        If a cross (+) appears appears,
        please quickly press both keys.

        PRESS THE SPACEBAR WHEN READY
    KeyboardComponent keyPressRun
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Fixation
    PolygonComponent fixation
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent fixationImage
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        blockIdx = blockIdx + 1
  Routine Fixation10
    PolygonComponent fixation10
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent fixationImage10
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent code_29
      Code Type = Py
    TextComponent text
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
      text = 3 . . .
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    TextComponent text_2
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 1.0
      text = 2 . .
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    TextComponent text_3
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 1.0
      text = 1 .
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  Routine init
    CodeComponent InitCode
      Code Type = Py
      Begin Routine:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')

        # Open LabRecorder
        #os.startfile(".\lib\LabRecorder\LabRecorder.exe")




        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='my_stream_name', type='Markers', channel_count=1,
                          channel_format='string', source_id='keyboard("`" , "-")')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)









        # Fix random seed
        random.seed()
        # Read stimuli excel file
        infile = './lib/list.xlsx'
        # Number of stimuli
        num_rows = 18
        num_trials = 13


        #Open the xlsx stimuli file and select the first sheet
        inbook = xlrd.open_workbook(infile)
        List1 = inbook.sheet_by_index(0)
        List2 = inbook.sheet_by_index(1)
        List3 = inbook.sheet_by_index(2)
        List4 = inbook.sheet_by_index(3)
        List5 = inbook.sheet_by_index(4)
        List6 = inbook.sheet_by_index(5)
        List7 = inbook.sheet_by_index(6)
        List8 = inbook.sheet_by_index(7)





        #Target1=[]  #first stimulus in AX-AY-BX-BY
        #Jitter1=[]
        #read the stimuli from our sheet
        #for rowx in range(num_rows):
        #    row = List1.row_values(rowx)
        #    Jitter1.append(row[3])


        #row = List1.row_values(0)
        #Target1.append(row[9])
  Routine initiation
    CodeComponent code_1
      Code Type = Py
      Begin Routine:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')



        # Open LabRecorder
        #os.system(".\lib\LabRecorder\LabRecorder.exe")




        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='Keyboard', type='Markers', channel_count=1,
                          channel_format='string', source_id='Keyboard')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)



        currentTime = expInfo['date']
        subjectID = expInfo['participant']
        Labrecorder = '.\lib\LabRecorder\LabRecorderCLI.exe'
        Dataset='.\Dataset'

        # Open LabRecorder
        import subprocess, sys, os, winpexpect, time
        #os.system("start /B start cmd.exe @cmd /k .\lib\LabRecorder\LabRecorderCLI.exe .\Dataset\'currentTime'.xdf 'type=EEG'")
        #os.system("start /B start cmd.exe @cmd /k %s %s\%s_%s 'type=EEG'" % (Labrecorder, Dataset, currentTime,subjectID))
        child =  winpexpect.winspawn('%s %s\%s_%s.xdf \'name="Keyboard"\'' % (Labrecorder,Dataset,subjectID,currentTime))



        # Fix random seed
        random.seed()
        # Read stimuli excel file
        infile = './lib/listA1.xlsx'
        # Number of stimuli
        numBlocks = 8
        numTrials = 12

        pictureSize=(0.75,1)
        greenSize=(1.6,1.2)




        Jitter = []
        Duration = []
        ISI = []
        Picture = []
        correctseth = []
        Target = []
        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        for rowx in range(1,List.nrows):
            row = List.row_values(rowx)
            Jitter.append(row[3])
            Picture.append(row[4])
            Duration.append(row[5])
            ISI.append(row[6])
            correctseth.append(row[8])
            Target.append(row[9])


        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        procIdx = []
        for rowx in range(1,9):
            row = List.row_values(rowx)
            indices = row[11]
            procLine, aa = indices.split(":")
            procIdx.append(int(procLine))

        # index of trial number and block number
        trialIdx = 0
        blockIdx = 0

        # parse out the duration of trial and inter-trial
        TrialDuration = [x/1000 for x in Duration]
        ITDuration = [x/1000 + y/1000 for x,y in zip(ISI,Jitter)]
  Routine TrialList
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        index = index + 1
    PolygonComponent blackTrial
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent whiteTrial
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent TrialPicture
      image [set every repeat] = $Picture[index]
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    KeyboardComponent keyPressTrial
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
      store = first key
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        #outlet.push_sample('t')
        outlet.push_sample(correctseth[index])
        PressedYet = 0
      Each Frame:
        # Send trial onset marker to LSL
        #if ((keyPressTrial.keys) and (not PressedYet)):
        #    outlet.push_sample(str(keyPressTrial.keys)[0])
        #    PressedYet = 1

        if ((keyPressTrial.keys) and (not PressedYet)):
            if correctseth[index] == str(keyPressTrial.keys)[0]:
                outlet.push_sample('1')
                #print('correct')
            else:
                outlet.push_sample('2')
                #print('incorrect')
            PressedYet = 1
  Routine waitInterTrial
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent blackWaitInterTrial
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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  Routine Procedure1
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx-1
    PolygonComponent blackProc
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent greenProc
      fillColor = green
      lineColor = green
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcTarget
      image [set every repeat] = $Target[index]
      pos = (-0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcPicture
      image [set every repeat] = $Picture[index]
      pos = (0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('b')
  Routine ProcedureSelection
    CodeComponent code_11
      Code Type = Py
  Routine end
    PolygonComponent polygon_end
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('e')
  Routine calc
    CodeComponent code_8
      Code Type = Py
  Routine calc_2
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx

        print(index)
        print(Duration[index])

        TrialDuration=Duration[index]/1000+Jitter[index]/1000
        ITDuration=ISI[index]/1000+Jitter[index]/1000
  Routine initiation_2
    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        # Read stimuli excel file
        infile = './lib/listA2.xlsx'

        Jitter = []
        Duration = []
        ISI = []
        Picture = []
        correctseth = []
        Target = []
        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        for rowx in range(1,List.nrows):
            row = List.row_values(rowx)
            Jitter.append(row[3])
            Picture.append(row[4])
            Duration.append(row[5])
            ISI.append(row[6])
            correctseth.append(row[8])
            Target.append(row[9])


        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        procIdx = []
        for rowx in range(1,9):
            row = List.row_values(rowx)
            indices = row[11]
            procLine, aa = indices.split(":")
            procIdx.append(int(procLine))

        # index of trial number and block number
        trialIdx = 0
        blockIdx = 0

        # parse out the duration of trial and inter-trial
        TrialDuration = [x/1000 for x in Duration]
        ITDuration = [x/1000 + y/1000 for x,y in zip(ISI,Jitter)]
  Routine description_2
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_2
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A2
        Please determine whether each image matches one of the images shown with a green border.
        If it matches,
        please quickly press the A (L) key.
        If it does not,
        please quickly press the L (A) key.

        If a cross (+) appears appears,
        please quickly press both keys.

        PRESS THE SPACEBAR WHEN READY
    KeyboardComponent keyPressRun_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Fixation10_2
    PolygonComponent fixation10_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent fixationImage10_2
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent code_30
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('f')
  Routine Procedure1_2
    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx-1
    PolygonComponent blackProc_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent greenProc_2
      fillColor = green
      lineColor = green
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcTarget_2
      image [set every repeat] = $Target[index]
      pos = (-0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcPicture_2
      image [set every repeat] = $Picture[index]
      pos = (0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('b')
  Routine waitInterTrial_2
    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent blackWaitInterTrial_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial_3
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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  Routine TrialList_2
    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        index = index + 1
    PolygonComponent blackTrial_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent whiteTrial_2
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent TrialPicture_2
      image [set every repeat] = $Picture[index]
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    KeyboardComponent keyPressTrial_2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
      store = first key
      syncScreenRefresh = False
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    CodeComponent code_17
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        #outlet.push_sample('t')
        outlet.push_sample(correctseth[index])
        PressedYet = 0
      Each Frame:
        # Send trial onset marker to LSL
        #if ((keyPressTrial.keys) and (not PressedYet)):
        #    outlet.push_sample(str(keyPressTrial.keys)[0])
        #    PressedYet = 1

        if ((keyPressTrial.keys) and (not PressedYet)):
            if correctseth[index] == str(keyPressTrial.keys)[0]:
                outlet.push_sample('1')
                #print('correct')
            else:
                outlet.push_sample('2')
                #print('incorrect')
            PressedYet = 1
  Routine InterTrial_2
    PolygonComponent blackWaitInterTrial_4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial_4
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    CodeComponent code_18
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
  Routine Fixation_2
    PolygonComponent fixation_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent fixationImage_2
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        blockIdx = blockIdx + 1
  Routine end_2
    PolygonComponent polygon_end_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent end_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_20
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('e')
      End Routine:
        child.sendline('\r')
  Routine initiation_3
    CodeComponent code_21
      Code Type = Py
      Begin Experiment:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')

        # Open LabRecorder
        os.startfile(".\lib\LabRecorder\LabRecorder.exe")




        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='my_stream_name', type='Markers', channel_count=1,
                          channel_format='string', source_id='keyboard("a" , "l")')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)









        # Fix random seed
        random.seed()
        # Read stimuli excel file
        infile = './lib/listA2.xlsx'
        # Number of stimuli
        numBlocks = 8
        numTrials = 12

        pictureSize=(0.75,1)
        greenSize=(1.6,1.2)




        Jitter = []
        Duration = []
        ISI = []
        Picture = []
        correctseth = []
        Target = []
        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        for rowx in range(1,List.nrows):
            row = List.row_values(rowx)
            Jitter.append(row[3])
            Picture.append(row[4])
            Duration.append(row[5])
            ISI.append(row[6])
            correctseth.append(row[8])
            Target.append(row[9])


        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        procIdx = []
        for rowx in range(1,9):
            row = List.row_values(rowx)
            indices = row[11]
            procLine, aa = indices.split(":")
            procIdx.append(int(procLine))

        # index of trial number and block number
        trialIdx = 0
        blockIdx = 0

        # parse out the duration of trial and inter-trial
        TrialDuration = [x/1000 for x in Duration]
        ITDuration = [x/1000 + y/1000 for x,y in zip(ISI,Jitter)]
  Routine Fixation10_3
    PolygonComponent fixation10_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent fixationImage10_3
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent code_28
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('f')
  Routine EyesOpen
    PolygonComponent blackProc_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    PolygonComponent greenProc_3
      fillColor = white
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent ProcTarget_3
      image [set every repeat] = ./stimuli/images/086.bmp
      pos = (-0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent ProcPicture_3
      image [set every repeat] = ./stimuli/images/086.bmp
      pos = (0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    CodeComponent code_23
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('o')
  Routine waitInterTrial_3
    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent blackWaitInterTrial_5
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent whiteWaitInterTrial_5
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Fixation10_4
    PolygonComponent fixation10_4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent fixationImage10_4
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent code_27
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('f')
  Routine EyesClose
    PolygonComponent blackProc_4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    PolygonComponent greenProc_4
      fillColor = white
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent ProcTarget_4
      image [set every repeat] = ./stimuli/images/ocean.jpg
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    CodeComponent code_24
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('c')
  Routine waitInterTrial_4
    CodeComponent code_25
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent blackWaitInterTrial_6
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent whiteWaitInterTrial_6
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine end_3
    PolygonComponent polygon_end_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent end_text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_26
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('e')
  Routine EyesClose_2
    PolygonComponent blackProc_5
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    PolygonComponent greenProc_5
      fillColor = white
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent ProcTarget_5
      image [set every repeat] = ./stimuli/images/086.bmp
      pos = (-0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent ProcPicture_4
      image [set every repeat] = ./stimuli/images/086.bmp
      pos = (0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    CodeComponent code_31
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('o')
  Routine initiation_practice
    CodeComponent code_32
      Code Type = Py
      Begin Routine:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')
        pictureSize=(0.75,1)
        greenSize=(1.6,1.2)


        # Read stimuli excel file
        infile = './lib/listA3.xlsx'

        Jitter = []
        Duration = []
        ISI = []
        Picture = []
        correctseth = []
        Target = []
        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        for rowx in range(1,List.nrows):
            row = List.row_values(rowx)
            Jitter.append(row[3])
            Picture.append(row[4])
            Duration.append(row[5])
            ISI.append(row[6])
            correctseth.append(row[8])
            Target.append(row[9])


        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        procIdx = []
        for rowx in range(1,9):
            row = List.row_values(rowx)
            indices = row[11]
            procLine, aa = indices.split(":")
            procIdx.append(int(procLine))

        # index of trial number and block number
        trialIdx = 0
        blockIdx = 0

        # parse out the duration of trial and inter-trial
        TrialDuration = [x/1000 for x in Duration]
        ITDuration = [x/1000 + y/1000 for x,y in zip(ISI,Jitter)]
  Routine Procedure1_practice
    CodeComponent code_33
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx-1
    PolygonComponent blackProc_6
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent greenProc_6
      fillColor = green
      lineColor = green
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcTarget_6
      image [set every repeat] = $Target[index]
      pos = (-0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcPicture_5
      image [set every repeat] = $Picture[index]
      pos = (0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    CodeComponent code_34
      Code Type = Py
  Routine waitInterTrial_practice
    CodeComponent code_35
      Code Type = Py
    PolygonComponent blackWaitInterTrial_7
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial_7
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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  Routine TrialList_practice
    CodeComponent code_36
      Code Type = Py
      Begin Routine:
        index = index + 1
    PolygonComponent blackTrial_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent whiteTrial_3
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent TrialPicture_3
      image [set every repeat] = $Picture[index]
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    KeyboardComponent keyPressTrial_3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
      store = first key
      syncScreenRefresh = False
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    CodeComponent code_37
      Code Type = Py
  Routine InterTrial_practice
    PolygonComponent blackWaitInterTrial_8
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial_8
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    CodeComponent code_38
      Code Type = Py
  Routine Fixation_Practice
    PolygonComponent fixation_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent fixationImage_3
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_39
      Code Type = Py
  Routine end_Practice
    PolygonComponent polygon_end_4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent end_text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_40
      Code Type = Py
  Routine description_practice_2
    PolygonComponent polygon_6
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_6
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Practice

        If it matches,
        please quickly press the A (L) key.
        If it does not,
        please quickly press the L (A) key.



        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine description_practice_1
    PolygonComponent polygon_5
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_5
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Practice
        Please determine whether each image matches one of the images shown with a green border.



        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine description_practice_3
    PolygonComponent polygon_7
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_7
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Practice

        If a cross (+) appears appears,
        please quickly press both keys.



        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine desEyesOpen_2
    PolygonComponent polygon_8
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_8
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Try not to blink during this time




        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine desEyesOpen_3
    PolygonComponent polygon_9
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_9
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Try to be as still as possible

        We will come in as soon as minute is up




        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine desEyesOpen_1
    PolygonComponent polygon_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_3
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Eyes open for one minute
        Please stare at fixation point




        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine desEyesClose_2
    PolygonComponent polygon_10
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_10
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Try not to blink during this time




        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine desEyesClose_3
    PolygonComponent polygon_11
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_11
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Try to be as still as possible

        We will come in as soon as minute is up




        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine desEyesClose_1
    PolygonComponent polygon_4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_4
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Eyes close for one minute





        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine description_A1_2
    PolygonComponent polygon_13
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_13
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A1

        If it matches,
        please quickly press the A (L) key.
        If it does not,
        please quickly press the L (A) key.



        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine description_A1_3
    PolygonComponent polygon_14
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_14
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A1

        If a cross (+) appears appears,
        please quickly press both keys.



        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine description_A1_1
    PolygonComponent polygon_12
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_12
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A1
        Please determine whether each image matches one of the images shown with a green border.



        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine description_A2_1
    PolygonComponent polygon_15
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_15
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A2
        Please determine whether each image matches one of the images shown with a green border.



        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine description_A2_2
    PolygonComponent polygon_16
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_16
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A2

        If it matches,
        please quickly press the A (L) key.
        If it does not,
        please quickly press the L (A) key.



        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine description_A2_3
    PolygonComponent polygon_17
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_17
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A2

        If a cross (+) appears appears,
        please quickly press both keys.



        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine initiation_practice
  Routine description_practice_1
  Routine description_practice_2
  Routine description_practice_3
  Routine Fixation10
  Routine Procedure1_practice
  Routine waitInterTrial_practice
  LoopInitiator Practice_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine TrialList_practice
    Routine InterTrial_practice
  LoopTerminator Practice_trials
  Routine Fixation_Practice
  Routine end_Practice
  Routine initiation
  Routine desEyesOpen_1
  Routine desEyesOpen_2
  Routine desEyesOpen_3
  Routine Fixation10
  Routine EyesOpen
  Routine waitInterTrial_3
  Routine desEyesClose_1
  Routine desEyesClose_2
  Routine desEyesClose_3
  Routine Fixation10
  Routine EyesClose
  Routine waitInterTrial_4
  Routine end_3
  Routine description_A1_1
  Routine description_A1_2
  Routine description_A1_3
  Routine Fixation10
  LoopInitiator A1_Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = numBlocks
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    Routine Procedure1
    Routine waitInterTrial
    LoopInitiator A1_trials loopType="TrialHandler"
      loopType = sequential
      nReps = numTrials
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      Routine TrialList
      Routine InterTrial
    LoopTerminator A1_trials
    Routine Fixation
  LoopTerminator A1_Blocks
  Routine end
  Routine initiation_2
  Routine description_A2_1
  Routine description_A2_2
  Routine description_A2_3
  Routine Fixation10
  LoopInitiator A2_Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = numBlocks
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    Routine Procedure1_2
    Routine waitInterTrial_2
    LoopInitiator A2_trials loopType="TrialHandler"
      loopType = sequential
      nReps = numTrials
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      Routine TrialList_2
      Routine InterTrial_2
    LoopTerminator A2_trials
    Routine Fixation_2
  LoopTerminator A2_Blocks
  Routine end_2
