PsychoPy2experiment version="3.0.1"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = untitled
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Routines
  Routine InterTrial
    PolygonComponent blackWaitInterTrial_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent whiteWaitInterTrial_2
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
  Routine Fixation
    PolygonComponent fixation
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent fixationImage
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
  Routine Fixation10
    PolygonComponent fixation10
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent fixationImage10
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent text
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
      text = 3 . . .
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    TextComponent text_2
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 1.0
      text = 2 . .
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    TextComponent text_3
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 1.0
      text = 1 . .
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  Routine init
    CodeComponent InitCode
      Code Type = Py
      Begin Routine:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')

        # Open LabRecorder
        #os.startfile(".\lib\LabRecorder\LabRecorder.exe")




        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='my_stream_name', type='Markers', channel_count=1,
                          channel_format='string', source_id='keyboard("`" , "-")')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)









        # Fix random seed
        random.seed()
        # Read stimuli excel file
        infile = './lib/list.xlsx'
        # Number of stimuli
        num_rows = 18
        num_trials = 13


        #Open the xlsx stimuli file and select the first sheet
        inbook = xlrd.open_workbook(infile)
        List1 = inbook.sheet_by_index(0)
        List2 = inbook.sheet_by_index(1)
        List3 = inbook.sheet_by_index(2)
        List4 = inbook.sheet_by_index(3)
        List5 = inbook.sheet_by_index(4)
        List6 = inbook.sheet_by_index(5)
        List7 = inbook.sheet_by_index(6)
        List8 = inbook.sheet_by_index(7)





        #Target1=[]  #first stimulus in AX-AY-BX-BY
        #Jitter1=[]
        #read the stimuli from our sheet
        #for rowx in range(num_rows):
        #    row = List1.row_values(rowx)
        #    Jitter1.append(row[3])


        #row = List1.row_values(0)
        #Target1.append(row[9])
  Routine initiation
    CodeComponent code_1
      Code Type = Py
      Begin Experiment:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')

        # Open LabRecorder
        #os.startfile(".\lib\LabRecorder\LabRecorder.exe")


        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='Keyboard', type='Markers', channel_count=1,
                          channel_format='string', source_id='Keyboard')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)



        currentTime = expInfo['date']
        subjectID = expInfo['participant']
        Labrecorder = '.\lib\LabRecorder\LabRecorderCLI.exe'
        Dataset='.\Dataset'

        # Open LabRecorder
        import subprocess, sys, os, winpexpect, time
        #os.system("start /B start cmd.exe @cmd /k .\lib\LabRecorder\LabRecorderCLI.exe .\Dataset\'currentTime'.xdf 'type=EEG'")
        #os.system("start /B start cmd.exe @cmd /k %s %s\%s_%s 'type=EEG'" % (Labrecorder, Dataset, currentTime,subjectID))
        child =  winpexpect.winspawn('%s %s\%s_%s.xdf \'name="Keyboard"\'' % (Labrecorder,Dataset,currentTime,subjectID))



        # Fix random seed
        random.seed()


        pictureSize=(0.75,1)
        greenSize=(1.6,1.2)
  Routine TrialList
    PolygonComponent blackTrial
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent whiteTrial
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent TrialPicture
      image [set every repeat] = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent keyPressTrial
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = False
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  Routine waitInterTrial
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent blackWaitInterTrial
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent whiteWaitInterTrial
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine ProcedureSelection
    CodeComponent code_11
      Code Type = Py
  Routine end
    PolygonComponent polygon_end
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('e')
      End Routine:
        child.sendline('\r')
  Routine calc
    CodeComponent code_8
      Code Type = Py
  Routine calc_2
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx

        print(index)
        print(Duration[index])

        TrialDuration=Duration[index]/1000+Jitter[index]/1000
        ITDuration=ISI[index]/1000+Jitter[index]/1000
  Routine description1
    PolygonComponent polygon1
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText1
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Eyes open for one minute
        Please stare at fixation point

        Try not to blink during this time

        Try to be as still as possible

        We will come in as soon as minute is up
    KeyboardComponent keyPressRun1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine EyesOpen
    PolygonComponent blackProc
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    PolygonComponent greenProc
      fillColor = white
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent ProcTarget
      image [set every repeat] = ./stimuli/images/086.bmp
      pos = (-0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent ProcPicture
      image [set every repeat] = ./stimuli/images/086.bmp
      pos = (0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('o')
  Routine description2
    PolygonComponent polygon2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText2
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Eyes close for one minute

        Try not to blink during this time

        Try to be as still as possible

        We will come in as soon as minute is up
    KeyboardComponent keyPressRun2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine EyesClose
    PolygonComponent blackProc_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    PolygonComponent greenProc_2
      fillColor = white
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent ProcTarget_2
      image [set every repeat] = ./stimuli/images/ocean.jpg
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('c')
Flow
  Routine initiation
  Routine description1
  Routine Fixation10
  Routine EyesOpen
  Routine waitInterTrial
  Routine description2
  Routine Fixation10
  Routine EyesClose
  Routine waitInterTrial
  Routine end
