PsychoPy2experiment version="2021.1.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Completed URL = completedURL
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant ID'], expName, expInfo['date'])
  Experiment info = {'Participant ID': ''}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  expName = untitled
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Routines
  Routine Fixation10
    PolygonComponent fixation
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent fixationImage
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent text
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3 . . .
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    TextComponent text_2
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 2 . .
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    TextComponent text_3
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 1 .
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  Routine initiation
    CodeComponent init
      Code Type = Py
      Begin Routine:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')





        pictureSize=(0.75,1)
        greenSize=(1.6,1.2)
    CodeComponent init_LSL
      Code Type = Py
      Begin Routine:
        # Open LabRecorder
        #os.system(".\lib\LabRecorder\LabRecorder.exe")

        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamInlet, StreamOutlet, resolve_stream
        info = StreamInfo(name='BluegrassMemoryExperiment', type='Markers', channel_count=1,
                          channel_format='string', source_id='Keyboard')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)
    CodeComponent init_LabRecorder
      Code Type = Py
      Begin Routine:
        # Open LabRecorder
        #os.system(".\lib\LabRecorder\LabRecorder.exe")


        #currentTime = expInfo['date']
        #subjectID = expInfo['participant']
        #Labrecorder = '.\lib\LabRecorder\LabRecorderCLI.exe'
        #Dataset='.\Dataset'

        # Open LabRecorder
        #import subprocess, sys, os, winpexpect, time
        #child =  winpexpect.winspawn('%s %s\%s_%s.xdf \'name="Keyboard"\'' % (Labrecorder,Dataset,subjectID,currentTime))
    CodeComponent init_Serial
      Code Type = Py
      Begin Routine:
        # send markers to serial port
        import serial
        import time

        # check if a com port is selected to send markers
        isSerial = expInfo['COM Port Marker Receiver']
        if isSerial != '':
            port_serial = serial.Serial(isSerial, baudrate=115200)
  Routine end
    PolygonComponent polygon_end
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your participation!
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    CodeComponent code_LSL_2
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('e')

        # Send trial onset marker to serial port
        if isSerial != '':
            port_serial.write(b'e')
      End Routine:
        # child.sendline('\r')
  Routine EyesOpen
    CodeComponent code_LSL
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('o')

        # Send trial onset marker to serial port
        if isSerial != '':
            port_serial.write(b'o')
    PolygonComponent blackProc
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    PolygonComponent greenProc
      fillColor = white
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    ImageComponent ProcTarget
      image [set every repeat] = ./stimuli/images/ocean.jpg
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 90
      stopVal [duration (s)] = 2.0
      syncScreenRefresh = False
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  Routine desEyesOpen
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Eyes open for 1.5 minutes

        Please stare at fixation point


        Try to be as still as possible

        We will wake you as soon as time is up




        Press SPACEBAR to continue
    KeyboardComponent keyPressRun
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine initiation
  Routine desEyesOpen
  Routine Fixation10
  Routine EyesOpen
  Routine end
