PsychoPy2experiment version="2020.2.10"
Settings
  Completed URL = completedURL
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant ID'], expName, expInfo['date'])
  Experiment info = {'Participant ID': '', 'Age': '', 'Sex': "['Male', 'Female']", 'Handedness': "['Right-handed', 'Left-handed', 'Ambidextrous']", 'EEG headset': "['Emotiv EPOC(+)', 'gtec Unicorn', 'gtec Nautilus 32']"}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  expName = untitled
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Routines
  Routine Fixation10
    PolygonComponent fixation10
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent fixationImage10
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent text
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3 . . .
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    TextComponent text_2
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 2 . .
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    TextComponent text_3
      letterHeight = 0.3
      pos = (0, -0.7)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 1 .
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  Routine ProcedureSelection
    CodeComponent code_11
      Code Type = Py
  Routine InterTrial_2
    PolygonComponent blackWaitInterTrial_4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    ImageComponent whiteWaitInterTrial_4
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    PolygonComponent green_fb_2
      fillColor = green
      lineColor = green
      opacity [set every frame] = greenDotOpac
      shape = triangle
      size [set every frame] = (greenFBSize, greenFBSize)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    PolygonComponent red_fb_2
      fillColor = red
      lineColor = red
      opacity [set every frame] = redDotOpac
      shape = rectangle
      size [set every frame] = (redFBSize, redFBSize)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    KeyboardComponent keyPressTrial_4
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
      store = first key
      syncScreenRefresh = False
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    CodeComponent code_reset_feedback_2
      Code Type = Py
      Each Frame:
        # Send trial onset marker to LSL
        if ((keyPressTrial_4.keys) and (not PressedYet)):
            if correctseth[index] == str(keyPressTrial_4.keys)[0]:
                outlet.push_sample('1')

                if AudiovisualCue:
                    tone.correct()
                    greenDotOpac = 1
                #print('correct')
            else:
                outlet.push_sample('2')

                if AudiovisualCue:
                    tone.incorrect()
                    redDotOpac = 1
                #print('incorrect')
            PressedYet = 1
      End Routine:
        greenDotOpac = 0
        redDotOpac = 0

        greenFBSize = 0
        redFBSize = 0
    PolygonComponent green_4
      fillColor = green
      lineColor = green
      opacity [set every frame] = greenDotOpac
      shape = star
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    PolygonComponent red_4
      fillColor = red
      lineColor = red
      opacity [set every frame] = redDotOpac
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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  Routine Fixation_2
    PolygonComponent fixation_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent fixationImage_2
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_blockAdder_2
      Code Type = Py
      Begin Routine:
        blockIdx = blockIdx + 1
  Routine InterTrial
    PolygonComponent blackWaitInterTrial_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    ImageComponent whiteWaitInterTrial_2
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    PolygonComponent green_fb_1
      fillColor = green
      lineColor = green
      opacity [set every frame] = greenDotOpac
      shape = triangle
      size [set every frame] = (greenFBSize, greenFBSize)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    PolygonComponent red_fb_1
      fillColor = red
      lineColor = red
      opacity [set every frame] = redDotOpac
      shape = rectangle
      size [set every frame] = (redFBSize, redFBSize)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    KeyboardComponent keyPressTrial_3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
      store = first key
      syncScreenRefresh = False
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    CodeComponent code_reset_feedback_1
      Code Type = Py
      Each Frame:
        # Send trial onset marker to LSL
        if ((keyPressTrial_3.keys) and (not PressedYet)):
            if correctseth[index] == str(keyPressTrial_3.keys)[0]:
                outlet.push_sample('1')

                if AudiovisualCue:
                    tone.correct()
                    greenDotOpac = 1
                #print('correct')
            else:
                outlet.push_sample('2')

                if AudiovisualCue:
                    tone.incorrect()
                    redDotOpac = 1
                #print('incorrect')
            PressedYet = 1
      End Routine:
        greenDotOpac = 0
        redDotOpac = 0

        greenFBSize = 0
        redFBSize = 0
    PolygonComponent green_3
      fillColor = green
      lineColor = green
      opacity [set every frame] = greenDotOpac
      shape = star
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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    PolygonComponent red_3
      fillColor = red
      lineColor = red
      opacity [set every frame] = redDotOpac
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index] +  feedbackDelay
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  Routine end
    PolygonComponent polygon_end
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = That completes Round 1 of the task
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        # outlet.push_sample('e')
  Routine Fixation
    PolygonComponent fixation
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent fixationImage
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_block_adder_1
      Code Type = Py
      Begin Routine:
        blockIdx = blockIdx + 1
  Routine init
    CodeComponent InitCode
      Code Type = Py
      Begin Routine:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')

        # Open LabRecorder
        #os.startfile(".\lib\LabRecorder\LabRecorder.exe")




        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='my_stream_name', type='Markers', channel_count=1,
                          channel_format='string', source_id='keyboard("`" , "-")')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)









        # Fix random seed
        random.seed()
        # Read stimuli excel file
        infile = './lib/list.xlsx'
        # Number of stimuli
        num_rows = 18
        num_trials = 13


        #Open the xlsx stimuli file and select the first sheet
        inbook = xlrd.open_workbook(infile)
        List1 = inbook.sheet_by_index(0)
        List2 = inbook.sheet_by_index(1)
        List3 = inbook.sheet_by_index(2)
        List4 = inbook.sheet_by_index(3)
        List5 = inbook.sheet_by_index(4)
        List6 = inbook.sheet_by_index(5)
        List7 = inbook.sheet_by_index(6)
        List8 = inbook.sheet_by_index(7)





        #Target1=[]  #first stimulus in AX-AY-BX-BY
        #Jitter1=[]
        #read the stimuli from our sheet
        #for rowx in range(num_rows):
        #    row = List1.row_values(rowx)
        #    Jitter1.append(row[3])


        #row = List1.row_values(0)
        #Target1.append(row[9])
  Routine initiation
    CodeComponent init_block1
      Code Type = Py
      Begin Routine:
        # Add random and excel library
        import random, xlrd, os, sys
        sys.path.append('./lib/')






        # Fix random seed
        random.seed()
        if expInfo['Experiment Mode'] == 'train-A':
            # Read stimuli excel file
            if expInfo['Handedness'] in ['Right-handed', 'Ambidextrous']:
                infile = './lib/listA1_Righty.xlsx'
            elif expInfo['Handedness'] in ['Left-handed']:
                infile = './lib/listA1_Lefty.xlsx'
            # Number of stimuli
            numBlocks = 8
            numTrials = 20


        elif expInfo['Experiment Mode'] == 'train-B':
            # Read stimuli excel file
            if expInfo['Handedness'] in ['Right-handed', 'Ambidextrous']:
                infile = './lib/listA3_Righty.xlsx'
            elif expInfo['Handedness'] in ['Left-handed']:
                infile = './lib/listA3_Lefty.xlsx'
            # Number of stimuli
            numBlocks = 8
            numTrials = 20

        elif expInfo['Experiment Mode'] == 'train-A(short)':
            # Read stimuli excel file
            if expInfo['Handedness'] in ['Right-handed', 'Ambidextrous']:
                infile = './lib/listA1_Righty.xlsx'
            elif expInfo['Handedness'] in ['Left-handed']:
                infile = './lib/listA1_Lefty.xlsx'
            # Number of stimuli
            numBlocks = 8
            numTrials = 12


        elif expInfo['Experiment Mode'] == 'train-B(short)':
            # Read stimuli excel file
            if expInfo['Handedness'] in ['Right-handed', 'Ambidextrous']:
                infile = './lib/listA3_Righty.xlsx'
            elif expInfo['Handedness'] in ['Left-handed']:
                infile = './lib/listA3_Lefty.xlsx'
            # Number of stimuli
            numBlocks = 8
            numTrials = 12


        pictureSize=(0.75,1)
        greenSize=(1.6,1.2)




        Jitter = []
        Duration = []
        ISI = []
        Picture = []
        correctseth = []
        Target = []
        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        for rowx in range(1,List.nrows):
            row = List.row_values(rowx)
            Jitter.append(row[3])
            Picture.append(row[4])
            Duration.append(row[5])
            ISI.append(row[6])
            correctseth.append(row[8])
            Target.append(row[9])


        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        procIdx = []
        for rowx in range(1,9):
            row = List.row_values(rowx)
            indices = row[11]
            procLine, aa = indices.split(":")
            procIdx.append(int(procLine))

        # index of trial number and block number
        trialIdx = 0
        blockIdx = 0

        # parse out the duration of trial and inter-trial
        TrialDuration = [x/1000 for x in Duration]
        ITDuration = [x/1000 + y/1000 for x,y in zip(ISI,Jitter)]
    CodeComponent init_LSL
      Code Type = Py
      Begin Routine:
        # Open LabRecorder
        #os.system(".\lib\LabRecorder\LabRecorder.exe")

        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamInlet, StreamOutlet, resolve_stream
        info = StreamInfo(name='BluegrassMemoryExperiment', type='Markers', channel_count=1,
                          channel_format='string', source_id='Keyboard')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)


        # LSL for feedback stream
        #streams = resolve_stream('name', 'feedbackStream')
        #if len(streams)>0:
        #    inlet = StreamInlet(streams[0])
    CodeComponent init_LabRecorder
      Code Type = Py
      Begin Routine:
        # Open LabRecorder
        #os.system(".\lib\LabRecorder\LabRecorder.exe")


        #currentTime = expInfo['date']
        #subjectID = expInfo['participant']
        #Labrecorder = '.\lib\LabRecorder\LabRecorderCLI.exe'
        #Dataset='.\Dataset'

        # Open LabRecorder
        #import subprocess, sys, os, winpexpect, time
        #child =  winpexpect.winspawn('%s %s\%s_%s.xdf \'name="Keyboard"\'' % (Labrecorder,Dataset,subjectID,currentTime))
    CodeComponent init_feedback_1
      Code Type = Py
      Begin Routine:
        # visual and audio stimuli

        AudiovisualCue = bool(int(expInfo['Audiovisual Cue']))

        import toneplayer
        tone = toneplayer.toneplayer()
        greenDotOpac = 0
        redDotOpac = 0



        greenFBSize = 0
        redFBSize = 0
    CodeComponent init_Serial
      Code Type = Py
      Begin Routine:
        # send markers to serial port
        import serial
        import time

        # check if a com port is selected to send markers
        isSerial = expInfo['COM Port Marker Receiver']
        if isSerial != '':
            port_serial = serial.Serial(isSerial, baudrate=115200)
  Routine end_2
    PolygonComponent polygon_end_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent end_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your participation!
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    CodeComponent code_LSL_5
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('e')


        # Send trial onset marker to serial port
        if isSerial != '':
            port_serial.write(b'e')
      End Routine:
        # child.sendline('\r')
  Routine calc
    CodeComponent code_8
      Code Type = Py
  Routine waitInterTrial_4
    CodeComponent code_25
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent blackWaitInterTrial_6
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent whiteWaitInterTrial_6
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine description
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A1
        Please determine whether each image matches one of the images shown with a green border.
        If it matches,
        please quickly press the A (L) key.
        If it does not,
        please quickly press the L (A) key.

        If a cross (+) appears appears,
        please quickly press both keys.

        PRESS THE SPACEBAR WHEN READY
    KeyboardComponent keyPressRun
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine waitInterTrial_2
    PolygonComponent blackWaitInterTrial_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial_3
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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  Routine waitInterTrial_3
    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent blackWaitInterTrial_5
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent whiteWaitInterTrial_5
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine initiation_2
    CodeComponent init_block2
      Code Type = Py
      Begin Routine:
        if expInfo['Experiment Mode'] == 'train-A':
            # Read stimuli excel file
            if expInfo['Handedness'] in ['Right-handed', 'Ambidextrous']:
                infile = './lib/listA2_Lefty.xlsx'
            elif expInfo['Handedness'] in ['Left-handed']:
                infile = './lib/listA2_Righty.xlsx'
            # Number of stimuli
            numBlocks = 8
            numTrials = 20

        elif expInfo['Experiment Mode'] == 'train-B':
            # Read stimuli excel file
            if expInfo['Handedness'] in ['Right-handed', 'Ambidextrous']:
                infile = './lib/listA4_Lefty.xlsx'
            elif expInfo['Handedness'] in ['Left-handed']:
                infile = './lib/listA4_Righty.xlsx'
            # Number of stimuli
            numBlocks = 8
            numTrials = 20

        elif expInfo['Experiment Mode'] == 'train-A(short)':
            # Read stimuli excel file
            if expInfo['Handedness'] in ['Right-handed', 'Ambidextrous']:
                infile = './lib/listA2_Lefty.xlsx'
            elif expInfo['Handedness'] in ['Left-handed']:
                infile = './lib/listA2_Righty.xlsx'
            # Number of stimuli
            numBlocks = 8
            numTrials = 12

        elif expInfo['Experiment Mode'] == 'train-B(short)':
            # Read stimuli excel file
            if expInfo['Handedness'] in ['Right-handed', 'Ambidextrous']:
                infile = './lib/listA4_Lefty.xlsx'
            elif expInfo['Handedness'] in ['Left-handed']:
                infile = './lib/listA4_Righty.xlsx'
            # Number of stimuli
            numBlocks = 8
            numTrials = 12





        Jitter = []
        Duration = []
        ISI = []
        Picture = []
        correctseth = []
        Target = []
        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        for rowx in range(1,List.nrows):
            row = List.row_values(rowx)
            Jitter.append(row[3])
            Picture.append(row[4])
            Duration.append(row[5])
            ISI.append(row[6])
            correctseth.append(row[8])
            Target.append(row[9])


        inbook = xlrd.open_workbook(infile)
        List = inbook.sheet_by_index(0)
        procIdx = []
        for rowx in range(1,9):
            row = List.row_values(rowx)
            indices = row[11]
            procLine, aa = indices.split(":")
            procIdx.append(int(procLine))

        # index of trial number and block number
        trialIdx = 0
        blockIdx = 0

        # parse out the duration of trial and inter-trial
        TrialDuration = [x/1000 for x in Duration]
        ITDuration = [x/1000 + y/1000 for x,y in zip(ISI,Jitter)]
    CodeComponent init_feedback_2
      Code Type = Py
      Begin Routine:
        # visual and audio stimuli

        import toneplayer
        tone = toneplayer.toneplayer()
        greenDotOpac = 0
        redDotOpac = 0


        greenFBSize = 0
        redFBSize = 0
  Routine calc_2
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx

        print(index)
        print(Duration[index])

        TrialDuration=Duration[index]/1000+Jitter[index]/1000
        ITDuration=ISI[index]/1000+Jitter[index]/1000
  Routine description_A2_1
    PolygonComponent polygon_15
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_15
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Round 2

        Now, you will complete the task again,
        but this time, you will switch the buttons for “match” and
         “no match
         press the A key to choose match, and press the L key to choose “non match”.

        Keep your left and right pointer fingers on the A and L at all time


        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine description_2
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_2
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        A2
        Please determine whether each image matches one of the images shown with a green border.
        If it matches,
        please quickly press the A (L) key.
        If it does not,
        please quickly press the L (A) key.

        If a cross (+) appears appears,
        please quickly press both keys.

        PRESS THE SPACEBAR WHEN READY
    KeyboardComponent keyPressRun_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine TrialList
    CodeComponent code_trialCounter_1
      Code Type = Py
      Begin Routine:
        index = index + 1
    PolygonComponent blackTrial
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent whiteTrial
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent TrialPicture
      image [set every repeat] = $Picture[index]
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    KeyboardComponent keyPressTrial_1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
      store = first key
      syncScreenRefresh = False
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    CodeComponent code_LSL_3
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        #outlet.push_sample('t')
        outlet.push_sample(correctseth[index])
        PressedYet = 0


        # Send trial onset marker to serial port
        if isSerial != '':
            markerStimSerial = correctseth[index]
            port_serial.write(markerStimSerial.encode())
      Each Frame:
        # Send trial onset marker to LSL
        if ((keyPressTrial_1.keys) and (not PressedYet)):
            if correctseth[index] == str(keyPressTrial_1.keys)[0]:
                outlet.push_sample('1')

                if AudiovisualCue:
                    tone.correct()
                    greenDotOpac = 1
                #print('correct')
            else:
                outlet.push_sample('2')

                if AudiovisualCue:
                    tone.incorrect()
                    redDotOpac = 1
                #print('incorrect')
            PressedYet = 1
      End Routine:
        greenDotOpac = 0
        redDotOpac = 0



        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent green_1
      fillColor = green
      lineColor = green
      opacity [set every frame] = greenDotOpac
      shape = star
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent red_1
      fillColor = red
      lineColor = red
      opacity [set every frame] = redDotOpac
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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  Routine Procedure1_2
    CodeComponent code_blockCounter_2
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx-1
    PolygonComponent blackProc_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent greenProc_2
      fillColor = green
      lineColor = green
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcTarget_2
      image [set every repeat] = $Target[index]
      pos = (-0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcPicture_2
      image [set every repeat] = $Picture[index]
      pos = (0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    CodeComponent code_LSL_2
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('b')



        # Send trial onset marker to serial port
        if isSerial != '':
            port_serial.write(b'b')
  Routine TrialList_2
    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        index = index + 1
    PolygonComponent blackTrial_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent whiteTrial_2
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent TrialPicture_2
      image [set every repeat] = $Picture[index]
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    KeyboardComponent keyPressTrial_2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
      store = first key
      syncScreenRefresh = False
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    CodeComponent code_LSL_4
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        #outlet.push_sample('t')
        outlet.push_sample(correctseth[index])
        PressedYet = 0



        # Send trial onset marker to serial port
        if isSerial != '':
            markerStimSerial = correctseth[index]
            port_serial.write(markerStimSerial.encode())
      Each Frame:
        # Send trial onset marker to LSL
        if ((keyPressTrial_2.keys) and (not PressedYet)):
            if correctseth[index] == str(keyPressTrial_2.keys)[0]:
                outlet.push_sample('1')

                if AudiovisualCue:
                    tone.correct()
                    greenDotOpac = 1
                #print('correct')
            else:
                outlet.push_sample('2')

                if AudiovisualCue:
                    tone.incorrect()
                    redDotOpac = 1
                #print('incorrect')
            PressedYet = 1
      End Routine:
        greenDotOpac = 0
        redDotOpac = 0




        # Send trial onset marker to LSL
        outlet.push_sample('n')
    PolygonComponent green_2
      fillColor = green
      lineColor = green
      opacity [set every frame] = greenDotOpac
      shape = star
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent red_2
      fillColor = red
      lineColor = red
      opacity [set every frame] = redDotOpac
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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  Routine description_A1_1
    PolygonComponent polygon_1
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText_1
      letterHeight = 0.09
      startVal [time (s)] = 0.0
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      text:
        Round 1

        Please determine whether each image matches one of the images shown with a green border.

         press the L key to choose match, and press the A key to choose “non match”.

        Keep your left and right pointer fingers on the A and L at all time


        Press SPACEBAR to continue
    KeyboardComponent keyPressRun_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Fixation10_4
    PolygonComponent fixation10_4
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent fixationImage10_4
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent code_27
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('f')
  Routine Fixation10_2
    PolygonComponent fixation10_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent fixationImage10_2
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent code_30
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('f')
  Routine Fixation10_3
    PolygonComponent fixation10_3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent fixationImage10_3
      image = ./stimuli/images/fix.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent code_28
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('f')
  Routine Procedure1
    CodeComponent code_blockCounter1
      Code Type = Py
      Begin Routine:
        index = procIdx[blockIdx]+trialIdx-1
    PolygonComponent blackProc
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    PolygonComponent greenProc
      fillColor = green
      lineColor = green
      shape = rectangle
      size [set every repeat] = $greenSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcTarget
      image [set every repeat] = $Target[index]
      pos = (-0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    ImageComponent ProcPicture
      image [set every repeat] = $Picture[index]
      pos = (0.4, 0)
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = TrialDuration[index]
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    CodeComponent code_LSL_1
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('b')


        # Send trial onset marker to serial port
        if isSerial != '':
            port_serial.write(b'b')
  Routine waitInterTrial
    PolygonComponent blackWaitInterTrial
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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    ImageComponent whiteWaitInterTrial
      image = ./stimuli/images/blank.bmp
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITDuration[index]
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  Routine Feedback_1
    CodeComponent code_feedback_1
      Code Type = Py
      Each Frame:
        feedbackDelay = 0
  Routine Feedback_2
    CodeComponent code_feedback
      Code Type = Py
      Each Frame:
        feedbackDelay = 0
Flow
  Routine initiation
  Routine description_A1_1
  Routine Fixation10
  LoopInitiator A1_Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = numBlocks
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    Routine Procedure1
    Routine waitInterTrial
    LoopInitiator A1_trials loopType="TrialHandler"
      loopType = sequential
      nReps = numTrials
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      Routine TrialList
      Routine Feedback_1
      Routine InterTrial
    LoopTerminator A1_trials
    Routine Fixation
  LoopTerminator A1_Blocks
  Routine end
  Routine initiation_2
  Routine description_A2_1
  Routine Fixation10
  LoopInitiator A2_Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = numBlocks
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    Routine Procedure1_2
    Routine waitInterTrial_2
    LoopInitiator A2_trials loopType="TrialHandler"
      loopType = sequential
      nReps = numTrials
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      Routine TrialList_2
      Routine Feedback_2
      Routine InterTrial_2
    LoopTerminator A2_trials
    Routine Fixation_2
  LoopTerminator A2_Blocks
  Routine end_2
